PsychoPy2experiment version="2026.2.4"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = TEST TEXT
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  Routine Image_1
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    ImageComponent Panda
      image = Animal Photos/images.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine trial
  Routine Image_1
